PsychoPy2experiment version="3.0.0b10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = lineReader
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Routines
  Routine trial
    ImageComponent Background
      image = background2.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 1800
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    TextComponent Text
      color = black
      letterHeight = 0.3
      pos [set every frame] = (-0.05*frameN+47, 0)
      startVal [frame N] = 0
      stopVal [frame N] = 1800
      text [set every frame] = Intro:  Presenter: In 1993 researchers in the United States discovered that students who listened to ten minutes of Mozart’s “Sonata for Two Pianos in D” significantly increased their IQ scores. Now on BBC radio 4 Paul Robertson, the leader of the Medici String Quartet explores the Mozart effect. (1) Paul Robertson: So this is it. This is the music which makes you brainy. Stick with us for just ten minutes and it will change your life. Well, That’s what the media would have us believe when they invented the term “Mozart effect”. It sent the world into a spin. Shops sold out of this recording. The State of Georgia called for a hundred and five thousand dollars to be set aside so that every mother could receive a free classical music tape, and parents all over the UK jumped at the chance to get their children ahead of the school pack. Mozart had apparently emerged from more than two hundred years of benign obscurity to become the greatest influence on health and education the world has ever known 
      wrapWidth = 100
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  Routine Questions
    RatingScaleComponent rating
      categoryChoices = 'A: conclusions that turned out to be scientifically invalid.', 'B: a new appreciation of the benefits of classical music.', 'C: over-excited reactions among people concerned with children.', 'D: I don't know.'
      forceEndRoutine = True
      high = 4
      low = 1
      pos = 0, -0.4
      scaleDescription = The claim that listening to Mozart makes you more intelligent led to...
      size = 1.0
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  Routine Questions
